CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Orig
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Orig
    Name the primary objects to be identified:Axon
    Typical diameter of objects, in pixel units (Min,Max):7,45
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3.5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.30,0.49
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:30
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    Thresholding method:Otsu

ImageMath:[module_num:6|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:originalInverted
    Image or measurement?:Image
    Select the first image:Orig
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Axon
    Name the objects to be identified:MyelinFull
    Select the method to identify the secondary objects:Distance - B
    Select the input image:originalInverted
    Number of pixels by which to expand the primary objects:100
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:No
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.45,0.7
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:30
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:MyelinFull
    Select the smaller identified objects:Axon
    Name the tertiary objects to be identified:MyelinSheath
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:MyelinSheath
    Select objects to measure:Axon
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\\\\\\\Rozne\\\\\\\\Michal\\\\\\\\WUM_nerwy\\\\\\\\Wyniki\\\\\\\\500_x_500
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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